# Generated by Configurator on Wed Nov 02 20:47:25 CET 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,DStateDevice,DemoCamera,DStateDevice
Device,DStage,DemoCamera,DStage

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000
Property,DStateDevice,Number of positions,10

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,DStateDevice,DHub
Parent,DStage,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,DStage,0

# Roles
Property,Core,Camera,DCam
Property,Core,Focus,DStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DStateDevice
Label,DStateDevice,9,State-9
Label,DStateDevice,8,State-8
Label,DStateDevice,7,State-7
Label,DStateDevice,6,State-6
Label,DStateDevice,5,State-5
Label,DStateDevice,4,State-4
Label,DStateDevice,3,State-3
Label,DStateDevice,2,State-2
Label,DStateDevice,1,State-1
Label,DStateDevice,0,State-0

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,DCam,BitDepth,16
ConfigGroup,System,Startup,DCam,Exposure,3.0000
ConfigGroup,System,Startup,DCam,Mode,Noise



# PixelSize settings

